begintemplate MPPCell

public vs, connect2target, id, is_art
public x, y, z, position, xpos, ypos, zpos
objref vs, rs, spikevect

proc init() { local status localobj ff strdef datasetPath, spikedataPath, cmd
    id = $1
    gid = $2
    datasetPath = $s4
    spikevect = new Vector()
    if (id % 10 == 0) {
        sprint(spikedataPath,"%s/MPPspiketrain.dat",datasetPath)
	sprint(cmd, "test -e %s", spikedataPath) // check if the path exists
        // status = system(cmd)
        status = 0
        if (status == 0) {
           vs = new VecStimRd()
           ff = new File()
           ff.ropen(spikedataPath)
           spikevect.scanf(ff)
           ff.close()
       	   vs.play(spikevect)
	} else {
           setup_netstim(id,gid,0.1,10,0,1)
	}
    } else {
           setup_netstim(id,gid,0.1,10,0,1)
    }
}


proc setup_netstim() {
    id = $1
    gid = $2
    rate   = $3
    number = $4
    start  = $5
    noise  = $6
    vs = new NetStim(.5)
    if (number > 0) {
       rs = new RandomStream(id, 21, 27)
       rs.r.negexp(1)
       rs.start()
       vs.noiseFromRandom(rs.r)
    }
    vs.interval = 1000/rate
    vs.number = number
    vs.start = start
    vs.noise = noise	
}


func is_art() {return 1}


obfunc connect2target() { // $o1 target point process, optional $o2 returned NetCon
  $o2 = new NetCon(vs, $o1)
  return $o2
}

proc setposition(){
    x = $1  y = $2  z = $3	
    xpos = $1  ypos = $2  zpos = $3	
}

endtemplate MPPCell
